<?xml version='1.0' encoding='UTF-8'?>
<model name="params_BG" xmlns="http://www.cellml.org/cellml/1.1#" xmlns:cellml="http://www.cellml.org/cellml/1.1#" xmlns:xlink="http://www.w3.org/1999/xlink">
    <import xlink:href="./units.cellml">
        <units name="per_fmol" units_ref="per_fmol"/>
        <units name="C_per_mol" units_ref="C_per_mol"/>
        <units name="fmol_per_s" units_ref="fmol_per_s"/>
        <units name="fmol" units_ref="fmol"/>
        <units name="J_per_K_mol" units_ref="J_per_K_mol"/>
        <units name="mM" units_ref="mM"/>
        <units name="pL" units_ref="pL"/>
        <units name="fA" units_ref="fA"/>
        <units name="fF" units_ref="fF"/>
    </import>
    <units name="volt_per_s">
        <unit exponent="-1" units="second"/>
        <unit units="volt"/>
    </units>
    <component name="params_BG">
        <variable initial_value="8.31" name="R" public_interface="out" units="J_per_K_mol"/>
        <variable initial_value="293" name="T" public_interface="out" units="kelvin"/>
        <variable initial_value="96485" name="F" public_interface="out" units="C_per_mol"/>
        <variable initial_value="3.231e-08" name="K_Nai" public_interface="out" units="per_fmol"/>
        <variable name="q_Nai" public_interface="out" units="fmol"/>
        <variable initial_value="3.231e-08" name="K_Nao" public_interface="out" units="per_fmol"/>
        <variable name="q_Nao" public_interface="out" units="fmol"/>
        <variable initial_value="5.434e-06" name="K_Glci" public_interface="out" units="per_fmol"/>
        <variable name="q_Glci" public_interface="out" units="fmol"/>
        <variable initial_value="5.434e-06" name="K_Glco" public_interface="out" units="per_fmol"/>
        <variable name="q_Glco" public_interface="out" units="fmol"/>
        <variable initial_value="1.888" name="K_1" public_interface="out" units="per_fmol"/>
        <variable initial_value="13.7727015449461" name="q_init_1" public_interface="out" units="fmol"/>
        <variable initial_value="8.897" name="K_2" public_interface="out" units="per_fmol"/>
        <variable initial_value="72.295598813025" name="q_init_2" public_interface="out" units="fmol"/>
        <!--  var K_3: per_fmol {init: 8.219, pub: out};
  var q_init_3: fmol {init: 0.16701061319503, pub: out};-->
        <!--  var K_4: per_fmol {init: 8.219, pub: out};
  var q_init_4: fmol {init: 0.233806833618937, pub: out};-->
        <!--     var K_5: per_fmol {init: 40.674, pub: out};-->
        <!--  var q_init_5: fmol {init: 1.73527350102727, pub: out};-->
        <!--  var q_init_5: fmol {init: 1.9691, pub: out};
  var q_init_5: fmol {init: 2.1361, pub: out};-->
        <variable initial_value="0.270" name="K_6" public_interface="out" units="per_fmol"/>
        <!--    var q_init_6: fmol {init: 11.4302815603453, pub: out};-->
        <variable initial_value="13.5664" name="q_init_6" public_interface="out" units="fmol"/>
        <variable name="V0_Vm" public_interface="out" units="volt"/>
        <variable initial_value="0.3" name="z_zf1" public_interface="out" units="dimensionless"/>
        <variable initial_value="0.3" name="z_zr1" public_interface="out" units="dimensionless"/>
        <variable initial_value="0.7" name="z_zf6" public_interface="out" units="dimensionless"/>
        <variable initial_value="0.7" name="z_zr6" public_interface="out" units="dimensionless"/>
        <variable initial_value="56.196" name="kappa_r1" public_interface="out" units="fmol_per_s"/>
        <variable initial_value="2.433" name="kappa_r2" public_interface="out" units="fmol_per_s"/>
        <!--  var kappa_r3: fmol_per_s {init: 6.084, pub: out};-->
        <!--  var kappa_r4: fmol_per_s {init: 97.337, pub: out};-->
        <!--      var kappa_r5: fmol_per_s {init: 0.246, pub: out};-->
        <variable initial_value="18.540" name="kappa_r6" public_interface="out" units="fmol_per_s"/>
        <!--    var kappa_r7: fmol_per_s {init: 0.034, pub: out};-->
        <variable initial_value="20" name="Nai" units="mM"/>
        <variable initial_value="100" name="Nao" units="mM"/>
        <variable initial_value="10e-3" name="Glci" units="mM"/>
        <variable initial_value="1e-12" name="Glco" units="mM"/>
        <variable initial_value="8.5e5" name="V_i" units="pL"/>
        <variable initial_value="8.5e5" name="V_o" units="pL"/>
        <variable name="t" public_interface="out" units="second"/>
        <variable initial_value="-0.05" name="V_E" public_interface="out" units="volt"/>
        <variable initial_value="0" name="test_volt" units="volt"/>
        <variable name="rate_VE" units="volt_per_s"/>
        <variable initial_value="1e-3" name="dt" units="second"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>V0_Vm</ci>
                <ci>V_E</ci>
            </apply>
            <apply>
                <eq/>
                <ci>q_Nai</ci>
                <apply>
                    <times/>
                    <ci>Nai</ci>
                    <ci>V_i</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>q_Nao</ci>
                <apply>
                    <times/>
                    <ci>Nao</ci>
                    <ci>V_o</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>q_Glci</ci>
                <apply>
                    <times/>
                    <ci>Glci</ci>
                    <ci>V_i</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>q_Glco</ci>
                <apply>
                    <times/>
                    <ci>Glco</ci>
                    <ci>V_o</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>V_E</ci>
                </apply>
                <ci>rate_VE</ci>
            </apply>
            <apply>
                <eq/>
                <ci>rate_VE</ci>
                <piecewise>
                    <piece>
                        <cn cellml:units="volt_per_s">0</cn>
                        <apply>
                            <lt/>
                            <ci>t</ci>
                            <cn cellml:units="second" type="e-notation">1204.75<sep/>-3</cn>
                        </apply>
                    </piece>
                    <piece>
                        <apply>
                            <divide/>
                            <apply>
                                <plus/>
                                <ci>test_volt</ci>
                                <cn cellml:units="volt">0.05</cn>
                            </apply>
                            <ci>dt</ci>
                        </apply>
                        <apply>
                            <and/>
                            <apply>
                                <geq/>
                                <ci>t</ci>
                                <cn cellml:units="second" type="e-notation">1204.75<sep/>-3</cn>
                            </apply>
                            <apply>
                                <lt/>
                                <ci>t</ci>
                                <apply>
                                    <plus/>
                                    <cn cellml:units="second" type="e-notation">1204.75<sep/>-3</cn>
                                    <ci>dt</ci>
                                </apply>
                            </apply>
                        </apply>
                    </piece>
                    <piece>
                        <cn cellml:units="volt_per_s">0</cn>
                        <apply>
                            <and/>
                            <apply>
                                <geq/>
                                <ci>t</ci>
                                <apply>
                                    <plus/>
                                    <cn cellml:units="second" type="e-notation">1204.75<sep/>-3</cn>
                                    <ci>dt</ci>
                                </apply>
                            </apply>
                            <apply>
                                <lt/>
                                <ci>t</ci>
                                <cn cellml:units="second" type="e-notation">2984.75<sep/>-3</cn>
                            </apply>
                        </apply>
                    </piece>
                    <piece>
                        <apply>
                            <divide/>
                            <apply>
                                <minus/>
                                <apply>
                                    <plus/>
                                    <ci>test_volt</ci>
                                    <cn cellml:units="volt">0.05</cn>
                                </apply>
                            </apply>
                            <ci>dt</ci>
                        </apply>
                        <apply>
                            <and/>
                            <apply>
                                <geq/>
                                <ci>t</ci>
                                <cn cellml:units="second" type="e-notation">2984.75<sep/>-3</cn>
                            </apply>
                            <apply>
                                <lt/>
                                <ci>t</ci>
                                <apply>
                                    <plus/>
                                    <cn cellml:units="second" type="e-notation">2984.75<sep/>-3</cn>
                                    <ci>dt</ci>
                                </apply>
                            </apply>
                        </apply>
                    </piece>
                    <otherwise>
                        <cn cellml:units="volt_per_s">0</cn>
                    </otherwise>
                </piecewise>
            </apply>
        </math>
    </component>
</model>
